File_New

;

File_Open
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! /SET_PROMPT=File_Open
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! /ON_FILE_NOT_FOUND=PROMPT
;

Modify_C3D_Subjects_Parameters
! /INCLUDE_CAL_FILE=TRUE
/IS_STATIC=0
/SUBJECTS_USES_PREFIXES=1
! /REMOVE_EXISTING_LABEL_PREFIXES=TRUE
/REMOVE_EXISTING_PREFIX_PARAMETERS=TRUE
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/C3D_PARAMETER_GROUPS=
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/OVERWRITE_C3D_FILE=1
;

File_Close
/FILE_NAME=*
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! /CLOSE_ASSOCIATED_MODELS=FALSE
;

Create_Hybrid_Model
! /CALIBRATION_FILE=C:\Users\User\Desktop\C-Motion\utiles\prueba 230112
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! /RANGE=ALL_FRAMES
! /SET_PROMPT=Open standing file
;

Set_Model_Metric
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/METRIC_NAME=Mass
/METRIC_VALUE=
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;

Set_Model_Metric
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/METRIC_NAME=Height
/METRIC_VALUE=
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;

Set_Subject_Mass
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! /PROMPT_SIZE=90
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! /UNITS=Kg
;

Set_Subject_Height
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! /UNITS=m
;

Set_Model_Metric
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/METRIC_NAME=Gravity
/METRIC_VALUE=9.81
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;

Set_Model_Metric
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/METRIC_NAME=Segment_to_COFP_Distance
/METRIC_VALUE=0.2
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;

Set_Model_Metric
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/METRIC_NAME=Joint_Radius_Ratio
/METRIC_VALUE=1.1
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;

Set_Model_Metric
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/METRIC_NAME=ASIS_Distance
/METRIC_VALUE=ASIS_Distance_Calculated
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;

Set_Model_Metric
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/METRIC_NAME=Target_Radius_ASIS
/METRIC_VALUE=0.000
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;

Set_Model_Metric
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/METRIC_NAME=RTH_Proximal_Radius
/METRIC_VALUE=0.5*DISTANCE(RIGHT_HIP,LEFT_HIP)
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;

Set_Model_Metric
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/METRIC_NAME=LTH_Proximal_Radius
/METRIC_VALUE=0.5*DISTANCE(LEFT_HIP,RIGHT_HIP)
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;

Set_Model_Metric
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/METRIC_NAME=RSK_Proximal_Radius
/METRIC_VALUE=RTH_DISTAL_RADIUS
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;

Set_Model_Metric
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/METRIC_NAME=LSK_Proximal_Radius
/METRIC_VALUE=LTH_DISTAL_RADIUS
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;

Set_Model_Metric
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/METRIC_NAME=RFT_Distal_Radius
/METRIC_VALUE=0.5*DISTANCE(RFM,RVM)
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;

Set_Model_Metric
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/METRIC_NAME=RFT_Proximal_Radius
/METRIC_VALUE=RSK_DISTAL_RADIUS
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;

Set_Model_Metric
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/METRIC_NAME=LFT_Distal_Radius
/METRIC_VALUE=0.5*DISTANCE(LFM,LVM)
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;

Set_Model_Metric
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/METRIC_NAME=LFT_Proximal_Radius
/METRIC_VALUE=LSK_DISTAL_RADIUS
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;

!
! Segment Info
!

!
! Segment RPV
!
HYBRID_SEGMENT
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/TYPE=Coda
/NAME=RPV
/REFERENCE_OBJECT=R.ASIS+L.ASIS+R.PSIS+L.PSIS
/REFERENCE_OBJECT_NAMES=RASIS+LASIS+RPSIS+LPSIS
/REFERENCE_OBJECT_TYPES=TARGET+TARGET+TARGET+TARGET
! /USE_CAL_TARGETS_FOR_TRACKING=TRUE
/TRACKING_TYPES=TARGET+TARGET+TARGET+TARGET
/TRACKING_NAMES=RASIS+LASIS+RPSIS+LPSIS
! /USE_OPTIMAL_TRACKING=TRUE
! /DO_NOT_USE_LOCAL_TRANSFORMATION=FALSE
! /KINEMATIC_ONLY=FALSE
! /USE_FOR_AUTO_ASSIGN=TRUE
! /STATIC_SEGMENT=FALSE
/GRAPHICS_ROT_X=0
/GRAPHICS_ROT_Y=0
/GRAPHICS_ROT_Z=0
/GRAPHICS_SCALE_X=1
/GRAPHICS_SCALE_Y=1
/GRAPHICS_SCALE_Z=1
/GRAPHICS_TRANSLATE_X=0
/GRAPHICS_TRANSLATE_Y=0
/GRAPHICS_TRANSLATE_Z=0
! /GRAPHICS_UNIT_SCALE=1.000000
! /GRAPHICS_SCALE_TO_SEG_LENGTH=TRUE
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/OBJFILE=PelvisWrtAsis.v3g
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! /FREQUENCY_CUTOFF_6DOF=0
;

!
! Segment RTH
!
HYBRID_SEGMENT
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/TYPE=Visual_3D
/NAME=RTH
/REFERENCE_OBJECT=Proximal Joint+Lateral Distal+Medial Distal+Distal Radius+Proximal Radius
/REFERENCE_OBJECT_NAMES=RIGHT_HIP+rle+rme+RTH_Distal_Radius+RTH_Proximal_Radius
/REFERENCE_OBJECT_TYPES=LANDMARK+TARGET+TARGET+METRIC+METRIC
/USE_CAL_TARGETS_FOR_TRACKING=FALSE
/TRACKING_TYPES=TARGET+TARGET+TARGET+TARGET
/TRACKING_NAMES=RGT+RLE+RME+RTH
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/GRAPHICS_ROT_X=0
/GRAPHICS_ROT_Y=0
/GRAPHICS_ROT_Z=0
/GRAPHICS_SCALE_X=1
/GRAPHICS_SCALE_Y=1
/GRAPHICS_SCALE_Z=1
/GRAPHICS_TRANSLATE_X=0
/GRAPHICS_TRANSLATE_Y=0
/GRAPHICS_TRANSLATE_Z=0
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/OBJFILE=rthigh.v3g
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;

!
! Segment LTH
!
HYBRID_SEGMENT
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/TYPE=Visual_3D
/NAME=LTH
/REFERENCE_OBJECT=Proximal Joint+Lateral Distal+Medial Distal+Distal Radius+Proximal Radius
/REFERENCE_OBJECT_NAMES=LEFT_HIP+LLE+LME+LTH_Distal_Radius+LTH_Proximal_Radius
/REFERENCE_OBJECT_TYPES=LANDMARK+TARGET+TARGET+METRIC+METRIC
/USE_CAL_TARGETS_FOR_TRACKING=FALSE
/TRACKING_TYPES=TARGET+TARGET+TARGET+TARGET
/TRACKING_NAMES=LGT+LLE+LME+LTH
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/GRAPHICS_ROT_X=0
/GRAPHICS_ROT_Y=0
/GRAPHICS_ROT_Z=0
/GRAPHICS_SCALE_X=1
/GRAPHICS_SCALE_Y=1
/GRAPHICS_SCALE_Z=1
/GRAPHICS_TRANSLATE_X=0
/GRAPHICS_TRANSLATE_Y=0
/GRAPHICS_TRANSLATE_Z=0
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/OBJFILE=lthigh.v3g
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;

!
! Segment RSK
!
HYBRID_SEGMENT
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/TYPE=Visual_3D
/NAME=RSK
/REFERENCE_OBJECT=Proximal Joint+Lateral Distal+Medial Distal+Distal Radius+Proximal Radius
/REFERENCE_OBJECT_NAMES=RIGHT_KNEE+rlm+rmm+RSK_Distal_Radius+RSK_Proximal_Radius
/REFERENCE_OBJECT_TYPES=LANDMARK+TARGET+TARGET+METRIC+METRIC
/USE_CAL_TARGETS_FOR_TRACKING=FALSE
/TRACKING_TYPES=TARGET+TARGET+TARGET+TARGET+TARGET
/TRACKING_NAMES=RHF+RLM+RMM+RSK+RTT
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/GRAPHICS_ROT_X=0
/GRAPHICS_ROT_Y=0
/GRAPHICS_ROT_Z=0
/GRAPHICS_SCALE_X=1
/GRAPHICS_SCALE_Y=1
/GRAPHICS_SCALE_Z=1
/GRAPHICS_TRANSLATE_X=0
/GRAPHICS_TRANSLATE_Y=0
/GRAPHICS_TRANSLATE_Z=0
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/OBJFILE=rshank.v3g
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;

!
! Segment LSK
!
HYBRID_SEGMENT
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/TYPE=Visual_3D
/NAME=LSK
/REFERENCE_OBJECT=Proximal Joint+Lateral Distal+Medial Distal+Distal Radius+Proximal Radius
/REFERENCE_OBJECT_NAMES=LEFT_KNEE+LLM+LMM+LSK_Distal_Radius+LSK_Proximal_Radius
/REFERENCE_OBJECT_TYPES=LANDMARK+TARGET+TARGET+METRIC+METRIC
/USE_CAL_TARGETS_FOR_TRACKING=FALSE
/TRACKING_TYPES=TARGET+TARGET+TARGET+TARGET+TARGET
/TRACKING_NAMES=LHF+LLM+LMM+LSK+LTT
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/GRAPHICS_ROT_X=0
/GRAPHICS_ROT_Y=0
/GRAPHICS_ROT_Z=0
/GRAPHICS_SCALE_X=1
/GRAPHICS_SCALE_Y=1
/GRAPHICS_SCALE_Z=1
/GRAPHICS_TRANSLATE_X=0
/GRAPHICS_TRANSLATE_Y=0
/GRAPHICS_TRANSLATE_Z=0
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/OBJFILE=lshank.v3g
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;

!
! Segment RFT
!
HYBRID_SEGMENT
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/TYPE=Visual_3D
/NAME=RFT
/REFERENCE_OBJECT=Proximal Joint+Distal Joint+Additional Plane+Additional Object+Distal Radius+Proximal Radius
/REFERENCE_OBJECT_NAMES=RIGHT_ANKLE+RTOE_FT+Lateral+lvm+RFT_Distal_Radius+RFT_Proximal_Radius
/REFERENCE_OBJECT_TYPES=LANDMARK+LANDMARK++TARGET+METRIC+METRIC
/USE_CAL_TARGETS_FOR_TRACKING=FALSE
/TRACKING_TYPES=TARGET+TARGET+TARGET+TARGET
/TRACKING_NAMES=RCA+RFM+RSM+RVM
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/GRAPHICS_ROT_X=0
/GRAPHICS_ROT_Y=0
/GRAPHICS_ROT_Z=0
/GRAPHICS_SCALE_X=1
/GRAPHICS_SCALE_Y=1
/GRAPHICS_SCALE_Z=1
/GRAPHICS_TRANSLATE_X=0
/GRAPHICS_TRANSLATE_Y=0
/GRAPHICS_TRANSLATE_Z=0
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/OBJFILE=rfoot.v3g
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;

!
! Segment LFT
!
HYBRID_SEGMENT
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/TYPE=Visual_3D
/NAME=LFT
/REFERENCE_OBJECT=Proximal Joint+Distal Joint+Additional Plane+Additional Object+Distal Radius+Proximal Radius
/REFERENCE_OBJECT_NAMES=LEFT_ANKLE+LTOE_FT+LATERAL+LVM+LFT_Distal_Radius+LFT_Proximal_Radius
/REFERENCE_OBJECT_TYPES=LANDMARK+LANDMARK++TARGET+METRIC+METRIC
/USE_CAL_TARGETS_FOR_TRACKING=FALSE
/TRACKING_TYPES=TARGET+TARGET+TARGET+TARGET
/TRACKING_NAMES=LCA+LFM+LSM+LVM
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/GRAPHICS_ROT_X=0
/GRAPHICS_ROT_Y=0
/GRAPHICS_ROT_Z=0
/GRAPHICS_SCALE_X=1
/GRAPHICS_SCALE_Y=1
/GRAPHICS_SCALE_Z=1
/GRAPHICS_TRANSLATE_X=0
/GRAPHICS_TRANSLATE_Y=0
/GRAPHICS_TRANSLATE_Z=0
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/OBJFILE=lfoot.v3g
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;

!
! Digitizing Wand Configuration
!
HYBRID_DIGITIZING_WAND
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/WAND_ORIENTATION_MARKER1=
/WAND_ORIENTATION_MARKER2=
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! /OFFSET_X=0
! /OFFSET_Y=0
/OFFSET_Z=-0.127
! /OFFSET_X2=0
! /OFFSET_Y2=0
! /OFFSET_Z2=0
! /WAND_HAS_SPRING=TRUE
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;

!
! Landmarks
Add_Landmark
/LANDMARK_NAME=RIGHT_HIP
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! /USER_GENERATED=TRUE
! /USE_PERCENTAGE=FALSE
! /CALIBRATION_ONLY=FALSE
! /USE_TARGETS=FALSE
/SEGMENT_NAME=RPV
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/MCS_ML=0.36*ASIS_Distance*RPV_ML_Direction
/MCS_AP=-0.19*ASIS_Distance*RPV_AP_Direction
/MCS_AXIAL=-0.30*ASIS_Distance*RPV_Axial_Direction
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! /USE_REFERENCE_LOCATION=FALSE
;

Add_Landmark
/LANDMARK_NAME=LEFT_HIP
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/SEGMENT_NAME=RPV
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/MCS_ML=-0.36*ASIS_Distance*RPV_ML_Direction
/MCS_AP=-0.19*ASIS_Distance*RPV_AP_Direction
/MCS_AXIAL=-0.30*ASIS_Distance*RPV_Axial_Direction
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;

Add_Landmark
/LANDMARK_NAME=RIGHT_KNEE
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/USE_PERCENTAGE=TRUE
/CALIBRATION_ONLY=TRUE
/USE_TARGETS=TRUE
/SEGMENT_NAME=LAB
/TARGET_TYPES=TARGET+TARGET
/TARGET_NAMES=RLE+RME
/MCS_ML=
/MCS_AP=
/MCS_AXIAL=0.5
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;

Add_Landmark
/LANDMARK_NAME=LEFT_KNEE
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/USE_PERCENTAGE=TRUE
/CALIBRATION_ONLY=TRUE
/USE_TARGETS=TRUE
/SEGMENT_NAME=LAB
/TARGET_TYPES=TARGET+TARGET
/TARGET_NAMES=LLE+LME
/MCS_ML=
/MCS_AP=
/MCS_AXIAL=0.5
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;

Add_Landmark
/LANDMARK_NAME=RIGHT_ANKLE
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/USE_PERCENTAGE=TRUE
/CALIBRATION_ONLY=TRUE
/USE_TARGETS=TRUE
/SEGMENT_NAME=LAB
/TARGET_TYPES=TARGET+TARGET
/TARGET_NAMES=RLM+RMM
/MCS_ML=
/MCS_AP=
/MCS_AXIAL=0.5
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;

Add_Landmark
/LANDMARK_NAME=LEFT_ANKLE
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/USE_PERCENTAGE=TRUE
/CALIBRATION_ONLY=TRUE
/USE_TARGETS=TRUE
/SEGMENT_NAME=LAB
/TARGET_TYPES=TARGET+TARGET
/TARGET_NAMES=LLM+LMM
/MCS_ML=
/MCS_AP=
/MCS_AXIAL=0.5
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;

Add_Landmark
/LANDMARK_NAME=RTOE_FT
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/CALIBRATION_ONLY=TRUE
/USE_TARGETS=TRUE
/SEGMENT_NAME=LAB
/TARGET_TYPES=TARGET+TARGET+TARGET+TARGET
/TARGET_NAMES=RCA+RVM+RFM+RSM
/MCS_ML=
/MCS_AP=
/MCS_AXIAL=
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;

Add_Landmark
/LANDMARK_NAME=LTOE_FT
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/CALIBRATION_ONLY=TRUE
/USE_TARGETS=TRUE
/SEGMENT_NAME=LAB
/TARGET_TYPES=TARGET+TARGET+TARGET+TARGET
/TARGET_NAMES=LCA+LVM+LFM+LSM
/MCS_ML=
/MCS_AP=
/MCS_AXIAL=
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;

!
! Muscles
!

Build_Model
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! /REBUILD_ALL_MODELS=FALSE
! /DISPLAY_RESULTS=TRUE
;

Save_Model_Template
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;

Apply_Model_Template
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/MODEL_TEMPLATE=
! /SET_PROMPT=Open model file
! /VIEW_BUILDMODEL_RESULTS=2
! /MISSING_TARGET_MESSAGE=FALSE
;

File_Open
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;

Modify_C3D_Subjects_Parameters
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/IS_STATIC=0
/SUBJECTS_USES_PREFIXES=1
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/REMOVE_EXISTING_PREFIX_PARAMETERS=TRUE
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/C3D_PARAMETER_GROUPS=
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/OVERWRITE_C3D_FILE=0
;

Assign_Model_File
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! /REMOVE_EXISTING_ASSIGNMENTS=FALSE
;

